# Makalu hBN confocal setup configuration file.
#
# John Jarman jcj27@cam.ac.uk

global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    nicard_6363:
        module.Class: 'national_instruments_x_series.NationalInstrumentsXSeries'
        photon_sources:
            - '/Dev1/PFI0'
        clock_channel: '/Dev1/Ctr0'
        default_clock_frequency: 100 # optional, in Hz
        counter_channels:
            - '/Dev1/Ctr1'
        default_scanner_clock_frequency: 100 # optional, in Hz
        scanner_clock_channel: '/Dev1/Ctr2'
        scanner_ao_channels:
            - '/Dev1/AO0'
            - '/Dev1/AO1'
            - '/Dev1/AO2'
        scanner_counter_channels:
            - '/Dev1/Ctr3'
        scanner_voltage_ranges:
            - [0, 8.28]
            - [0, 6]
            - [0, 1]    # Approx x100 via piezo amplifier
        scanner_position_ranges:
            - [0e-6, 100e-6]
            - [0e-6, 100e-6]
            - [0e-6, 10e-6]

        default_samples_number: 50
        max_counts: 12e6
        read_write_timeout: 10
        counting_edge_rising: True

        odmr_trigger_channel: '/Dev1/PFI12'
        odmr_trigger_line: 'Dev1/port0/line0'
        odmr_switch_line: 'Dev1/port0/line1'
        gate_in_channel: '/Dev1/PFI0'

    qutau:
        module.Class: 'qutau.qutau.QuTau'
        enabled_channels: [1, 2, 3]

    mw_source_srssg:
        module.Class: 'microwave.mw_source_srssg.MicrowaveSRSSG'
        gpib_address: 'GPIB0::27::INSTR'
        gpib_timeout: 1000
        max_power: 6

    hwp_motor:
        module.Class: 'motor.aptmotor.APTStage'
        dll_path: 'C:\Program Files\Thorlabs\APT\APT Server\APT.dll'
        axis_labels:
            - phi
        phi:
            hw_type: 'TDC001'
            serial_num: 83825728
            pitch: 17.87
            unit: 'degree'
            constraints:
                pos_min: -360
                pos_max: 720
                vel_min: 1.0
                vel_max: 10.0
                acc_min: 4.0
                acc_max: 10.0


logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'qutau'
            savelogic: 'savelogic'
    
    qutau_interfuse:
        module.Class: 'interfuse.confocal_scanner_slowcounter_interfuse.SlowcounterScannerInterfuse'
        connect:
            counter1: 'qutau'
            confocalscanner1: 'nicard_6363'

    hbtlogic:
        module.Class: 'hbt_logic.HbtLogic'
        connect:
            savelogic: 'savelogic'
            qutau: 'qutau'

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'nicard_6363'
            savelogic: 'savelogic'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'qutau_interfuse'
            fitlogic: 'fitlogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:\Data'
        unix_data_directory: 'Data/'
        log_into_daily_directory: True
        save_pdf: False
   
    aomlogic:
        module.Class: 'aom-control-logic.AomControlLogic'
        photodiode_channel: '/Dev1/ai0'
        aom_channel: '/Dev1/ao3'
        # Calibrated 30/70/2020
        photodiode_factor: 480
        query_interval: 10
        ui_update_interval: 100
        aom_volt_range: [0, 4.3]
        connect:
            nicard: 'nicard_6363'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimiserlogic: 'optimizerlogic'
            savelogic: 'savelogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:

    odmr_interfuse:
        module.Class: 'interfuse.odmr_software_trigger_interfuse.ODMRSoftwareTriggerInterfuse'
        connect:
            odmrcounter: 'nicard_6363'
            microwave: 'mw_source_srssg'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        scanmode: 'list'
        connect:
            odmrcounter: 'odmr_interfuse'
            fitlogic: 'fitlogic'
            microwave1: 'odmr_interfuse'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02
        default_meter_prefix: 'u'

    aom-control:
        module.Class: 'aom-control.aom-control-gui.AomControlGui'
        connect:
            aomlogic: 'aomlogic'

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic: 'poimanagerlogic'
            scannerlogic: 'scannerlogic'
            
    hbt:
        module.Class: 'hbt.hbtgui.HbtGui'
        connect:
            hbtlogic: 'hbtlogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'