#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fit'

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_channel: '/Dev1/Ctr0'
        clock_frequency: 100
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI8'
        photon_source2: '/Dev1/PFI9'
        remoteaccess: True

    aptmotor:
        module.Class: 'motor.aptmotor.APTStage'
        dll_path: 'C:\\thorlabs_apt\\thorlabs_apt\\APT.dll'
        axis_labels:
            - x
            - y
        x:
            hw_type: 'TDC001'
            serial_num: 83825728
            pitch:  1
            unit: 'm'
            constraints:
                pos_min: 0
                pos_max: 0.13
                vel_min: 0
                vel_max: 1.0
                acc_min: 4.0
                acc_max: 10.0
        y:
            hw_type: 'TDC001'
            serial_num: 83825772
            pitch: 1
            unit: 'm'
            constraints:
                pos_min: 0
                pos_max: 0.13
                vel_min: 0
                vel_max: 1.0
                acc_min: 4.0
                acc_max: 10.0

    attocube:
        module.Class: 'attocube_usb.AttoCubeStepper'
        port: 'COM4'
        port: 'COM4'
        axes: {'x':1,'y':2,'z':3}
        step_voltage_range: {'x':[0,60], 'y':[0,60]}
        frequency_range: {'x':[0,1000], 'y':[0,1000]}

logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counter:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter'
            savelogic: 'save'

    scanner:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            savelogic: 'save'

    optimizer:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            fitlogic: 'fit'

    fit:
        module.Class: 'fit_logic.FitLogic'

    save:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'

    stagecontrol:
        module.Class: 'stagecontrol_logic.StagecontrolLogic'
        connect:
            stagehardware: 'aptmotor'


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    countergui:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counter'

    confocalgui:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scanner'
            savelogic: 'save'
            optimizerlogic1: 'optimizer'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    stagecontrolgui:
        module.Class: 'stagecontrol.stagecontrolgui.StagecontrolGui'
        connect:
            stagecontrollogic: 'stagecontrol'
            